 '************************************************************
'   SFS Standard Measurement Program (Standard SDI-12 Mode)
'   ICT International Pty. Ltd.
'   Author: Rahinul Hoque
'   Date: 29 July 2026
'
' Description:
' This CRBasic program reads one ICT International SFS sensor
' using the standard SDI-12 measurement command:
'
' Each measurement cycle performs:
'   • A M! command to initiate HRM measurement
'   • Retrieval of D0 data frame
'   • Extraction of two values per sensor:
'       - Uncorrected outer Heat Pulse velocity
'       - Uncorrected inner Heat Pulse velocity
'
' Wiring:
'   • PWR (White) -> 12V
'   • DATA (Blue) -> C1 (SDI-12)
'   • GND (Black) -> G
'
'************************************************************


'************************************************************
' USER CONFIGURATION

' Change only the values in this section

'************************************************************

Const SFS_Address = 0 ' SDI-12 address of the SFS sensor

Const ScanInterval = 10 ' Minutes

Const LogInterval = 10 ' Minutes

'Note: ScanInterval cannot be greater than LogInterval


'************************************************************
'DONOT CHANGE ANYTHING BELOW
'************************************************************    



'======= Declarations =======
Public Uncorrected_outr_HPV As Float
Public Uncorrected_inr_HPV As Float
Public measurementStarted As Boolean 

Dim SDI12_String As String * 75        
Dim valueStr As String * 75                                     
Dim j As Long                                            
Dim signPos As Long                    

'======= Data Table =======
DataTable(SFSData_StandardM, True, -1)
  DataInterval(0, LogInterval, Min, 0)
  Sample(1, Uncorrected_outr_HPV, Float)
  Sample(1, Uncorrected_inr_HPV, Float)
EndTable

'======= Main Program =======
BeginProg
  Scan(ScanInterval, Min, 1, 0)
        measurementStarted = True

    SDI12Recorder(SDI12_String, C1, SFS_Address, "M!", 1, 0, 0, 0)
    Delay(1, 3, 2)
    If measurementStarted Then
        SDI12_String = ""
        ' Get data for current command (D0!)
        SDI12Recorder(SDI12_String, C1, SFS_Address, "D0!", 1, 0, 0, 0)
        ' Extract values from response if the string is valid
        If Len(SDI12_String) > 2 Then
          ' Extract first value - Skip the address character
          valueStr = Mid(SDI12_String, 2, 20)
          Uncorrected_outr_HPV = valueStr      ' CRBasic will auto-convert to float
          
          ' Find the position of second value in the string (after first sign)
          signPos = 0
          For j = 3 To Len(SDI12_String)
            If Mid(SDI12_String, j, 1) = "+" OR Mid(SDI12_String, j, 1) = "-" Then
              signPos = j
              Exit For
            EndIf
          Next j
          
          ' Extract and store second value if found
          If signPos > 0 Then
            valueStr = Mid(SDI12_String, signPos, 20)
            Uncorrected_inr_HPV = valueStr  ' CRBasic will auto-convert to float
          EndIf
        EndIf
    EndIf
    
    measurementStarted = False
    CallTable(SFSData_StandardM)
  NextScan
EndProg
